OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 1/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  Passive Speller

  This scenario capture the EEG brainwaves of a subject
  which uses the P300-Based BCI Speller but did not engage
  in attending any specific letter.

  The flast sequence will start after 20 sec.

  The speller produces 12 times
  flashing sequence of the whole grid. This will
  be repeated 10 times.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The P300 Speller Visualisation
  sends the markers (stimulations) directly to
  Acquisition Server using TCP Tagging.  If this box do not receive target stimulations,
  the subject will be unable to see which letter he may chose in the copy-spelling task.
Comment
  Here the data is streamed from the server to a file.
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})

Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 10
  Number of trials = 35
  Flash duration (in sec) = 0.125
  No flash duration (in sec) = 0.125
  Inter-repetition delay (in sec) = 0.000000
  Inter-trial delay (in sec) = 10.000000
  Avoid neighbor flashing = false
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_00
  Command 1 = C:\Windows\System32\cmd.exe /c "del C:\workspace\GuessMe\signahls\*.ov"
#1 -> Target Letter Generation => #3
  Lua Script = ${Player_ScenarioDirectory}/p300-passive-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#1, Target stimulations=#3 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 0,0,0
  Target foreground color = 25,25,25
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg

Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#5.Experiment information, Input stream 2=#5.Signal stream, Input stream 3=#5.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-train-[$core{date}-$core{time}].ov
  Use compression = false
#5.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Data=#5.Signal stream, Stimulations=#5.Stimulations, Channel Units=#5.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
