OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 1/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The use of these P300 examples are described in

  http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. The
  data will later be used to train a
  classifier for online use.

  The flast sequence will start after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. This will
  be repeated 10 times.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The P300 Speller Visualisation
  sends the markers (stimulations) directly to
  Acquisition Server using TCP Tagging.
Comment
  Here the data is streamed from the server to a file.
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})

Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> 0xc67a01dc P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 10
  Number of trials = 35
  Flash duration (in sec) = 0.125
  No flash duration (in sec) = 0.125
  Inter-repetition delay (in sec) = 0.000000
  Inter-trial delay (in sec) = 10.000000
  Avoid neighbor flashing = false
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_00
  Command 1 = C:\Windows\System32\cmd.exe /c "del C:\workspace\GuessMe\signahls\*.ov"
#1 -> Target Letter Generation => #3
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#1, Target stimulations=#3 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg

Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#5.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 10
-> Time based epoching => #8
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#8, Input stimulations=#5.Stimulations -> Stimulation based epoching "Target Selection" => #9
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#5.Stimulations, Session signal=#8, Evoked potential epochs=#9.Epoched signal -> xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/signals/p300-spatial-filter-[$core{date}-$core{time}].cfg
  Filter dimension = 3
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Input stream 1=#5.Experiment information, Input stream 2=#5.Signal stream, Input stream 3=#5.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-train-[$core{date}-$core{time}].ov
  Use compression = false
#5.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Data=#5.Signal stream, Stimulations=#5.Stimulations, Channel Units=#5.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
